CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select again all the files in the `tiff` folder']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Cyto
    Convert green to gray?:Yes
    Name the output image:Bg
    Convert blue to gray?:Yes
    Name the output image:Nuc
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucCyto
    Image or measurement?:Image
    Select the first image:Cyto
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc
    Multiply the second image by:1.0
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
ImageMath:[module_num:7|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
    Operation:Absolute Difference
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucCytoDiff
    Image or measurement?:Image
    Select the first image:Nuc
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cyto
    Multiply the second image by:1.0
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
ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedNucCytoDiff
    Image or measurement?:Image
    Select the first image:NucCytoDiff
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucSubtractCyto
    Image or measurement?:Image
    Select the first image:Nuc
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cyto
    Multiply the second image by:1.0
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
ImageMath:[module_num:10|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Boundary
    Image or measurement?:Image
    Select the first image:InvertedNucCytoDiff
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Bg
    Multiply the second image by:2.0
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
ImageMath:[module_num:11|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucBoundary
    Image or measurement?:Image
    Select the first image:Nuc
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Boundary
    Multiply the second image by:1.0
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
ImageMath:[module_num:12|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:NucBoundary
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cyto
    Multiply the second image by:1.0
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
Smooth:[module_num:13|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
    Select the input image:NucSubtractCyto
    Name the output image:SmoothNuc
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1
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
IdentifyPrimaryObjects:[module_num:14|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enabled:False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
    Select the input image:NucBoundary
    Name the primary objects to be identified:Clumps
    Typical diameter of objects, in pixel units (Min,Max):30,75
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:15
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:SmoothNuc
    Name the primary objects to be identified:NucleiSeeds
    Typical diameter of objects, in pixel units (Min,Max):7,32
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:16|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enabled:False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
    Select the input objects:NucleiSeeds
    Name the objects to be identified:Nuclei
    Select the method to identify the secondary objects:Propagation
    Select the input image:Nuc
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:17|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:NucleiBoundary
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucBoundary
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:18|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enabled:False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
    Select objects to measure:NucleiBoundary
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:19|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enabled:False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
    Select the objects to filter:NucleiBoundary
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:20|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
    Select the input objects:NucleiSeeds
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:NucCyto
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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
RescaleObjects:[module_num:21|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
    Select the input objects:Cells
    Name the output objects:RescaledCells
    Select the operation:Downscale objects with a scaling factor
    Factor to scale the object mask:0.5

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:RescaledCells
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Same folder as image|/mnt/bbvolume/server_homes/jwindh/Data/VitoExample/analysis/ilastik
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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